PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sample 1
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent target
      anchor = center-left
      fillColor = white
      pos [set every repeat] = (random()-0.5, random()-0.5)
      shape = triangle
      size = (0.02, 0.02)
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5:
            num_distrac = 10
            thisExp.addData('num_distrac', num_distrac)
        else:
            num_distrac = 5
            thisExp.addData('num_distrac', num_distrac)
        distractors = []

        for i in range(num_distrac):

            distrac = visual.ShapeStim(
                win=win, name='distrac', vertices='star7',
                size=(0.02, 0.02),
                ori=randint(1,360), pos=(random()-0.5, random()-0.5), anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-4.0, interpolate=True)


            distractors.append(distrac)


        for distrac in distractors:
            distrac.setAutoDraw(True)
      End Routine:
        for distrac in distractors:
            distrac.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      correctAns = triangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    SoundComponent sound_2
      sound [set every repeat] = $freq
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
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  Routine instruction
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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      text:
        Click on the target(square) when you see it
  PavloviaSurveyRoutine   survey
    surveyType = id
Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/Book1.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [{'duration': 0.2, 'freq': 400},
      {'duration': 0.4, 'freq': 400},
      {'duration': 0.6, 'freq': 400},
      {'duration': 0.1, 'freq': 400}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = data/book2.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [{'freq': 400},
      {'freq': 400},
      {'freq': 400},
      {'freq': 400}]
    Routine trial
  LoopTerminator trials_2
